/* devel-expt-report*/ 
/* output/append experimental details to a csv report*/

#include <inc/exptUtil>

/*DEFINITION - NEEDS TO BE SET*/
//char report_filename[PATH_MAX]="/Users/duncanhowe/nmr-in/expt-report.csv";
char report_filename[PATH_MAX]="D:\\disk2\\data\\expt-report.csv";
/*****************************/
FILE *report_file_pointer = NULL;
int verbose = 0; //set to one for verbose output
int exp_time = 0;
int num_scans = 0;


char instrum_name[40]="";
char data_path[PATH_MAX]="";
char nucleus[6]="";
char pulse_prog[80]="";

// static void PrintExpTime();
GETCURDATA
SETCURDATA
strcpy(data_path,ACQUPATH("acqus") );
FETCHPARS("NS",&num_scans)
FETCHPARS("INSTRUM", instrum_name)
FETCHPAR("NUC1",&nucleus);
FETCHPAR("PULPROG", pulse_prog);
exp_time = CalcExpTime();

if(verbose == 1){
	 Proc_err(DEF_ERR_OPT,"Instrument name defined as :- %s", instrum_name); 
   Proc_err(DEF_ERR_OPT,"Dataset name is :-  %s", name);
	 Proc_err(DEF_ERR_OPT,"Disk defined as :- %s", disk);
   Proc_err(DEF_ERR_OPT,"Data path is :- %s", data_path);
   Proc_err(DEF_ERR_OPT,"Number of scans is :- %i", num_scans);
   Proc_err(DEF_ERR_OPT,"Nuc1 is :- %s", nucleus);
   Proc_err(DEF_ERR_OPT,"Defined Experiment time in seconds is :-  %i ", exp_time);
   
}

report_file_pointer = fopen(report_filename,"a+"); 
if (report_file_pointer == NULL)
{
	Proc_err(DEF_ERR_OPT,"Can't open report file - %s", report_filename);
	exit(1);
}
else
{
  fprintf(report_file_pointer,"%s,%s,%s,%s,%s,%s,%i,%i\n", instrum_name, name, disk, data_path, nucleus, pulse_prog, num_scans, exp_time);
	fclose(report_file_pointer);
}
QUIT
