/*By Duncan Howe, University of Cambridge, November 2017                      */
/*To automate the process of aquiring a 2D map of a sample, by assembling     */
/*1D slice-selective results into a 2D ser file                               */
/*201802 - Added disclaimer                                                   */
/*201803 - Added gradient duty cycle calculation                              */
/*20180418 -in progress- adding debug option                                  */
/*         - removed logic to keep slice increment less than irradiation pulse*/
/*         - added info text                                                  */
/*20180419 - bandwidth of shaped pulse obtained from source exp               */
/*         - P1 obtained from source exp                                      */
/*20180515 - Added option to escape from debug mode                           */

#include <math.h>

/*Flags - set them to 0 to turn off                                           */
/************************************************************************************/
int debug=1; //if set to 1, no acquisition will run. Useful for test purposes
int disclaimer=1;
int infomsg=1;
/************************************************************************************/
/*default parameters*/
/************************************************************************************/
int num_slices = 10;
int exp_scans = 1;
int loop = 0;
int temp_exp_num = 999; //This is where the 1D acquisitions go
int result_exp = 899; //This is where the result goes. Set to the experiment called from further down. 899 is popt default.
int tmp_int=10;
int choice_ok = 0;
int orig_td = 8192;
int max_slices = 50;
/*below values are taken from Brukers 'typical pulses for cryoprobes' documentation*/
/*---------------------------------------------------------------------------------*/
float Tmax = 10; //maximum length of gradient in mS
float Imax = 10; //maximum gradient current in amps
float Tgrad = 0; //length of gradient desired by user
float Igrad = 0.0; //maximum gradient available at pulse length in amps
float Igrad_pc = 0.0; //maximum gradient available at pulse length as a percent
/*---------------------------------------------------------------------------------*/
float bandwidth_hz = 5000.0; //This is the the bandwidth to be irradiated
float offset_hz = 150000.0; //region of tube to observe over (+/-)
float offset_inc = 1; //The offset between each slice;
float gradient = 0.0;
float exp_gradient = 50.0; //The gradient strength to use;
float bottom_hz = 0-offset_hz;
float exp_rg = 8;
float exp_d1 = 1;
float d1_secs; //actual D1
float aq_secs; //actual aq time
float tmpfloat = 0.0;
float orig_p1 = 0.0;
float exp_p1 = 0.0;
float exp_p1w = 0.0;
float shape_length = 0.0;
float shape_power = 0.0;
float shape_power_dbw = 0.0;
double orig_o1 = 0.0;
double orig_sw = 10.0;
double orig_swh = 5000;
double orig_sfo1 = 0.0;
char tmpstr[1024];
char qtext[1024];
char titlefile[PATH_MAX];
char logfile[PATH_MAX];
char nucleus[8];
char paramset[PATH_MAX];
char paramfilePathname[PATH_MAX];

/*hardcoded limits*/
/************************************************************************************/
float bandwidth_hz_lower_limit = 2500;
float bandwidth_hz_upper_limit = 10000;
float gradient_upper_limit = 95; //max gradient power;
int   max_scans = 1024;
float min_d1 = 1;
float max_d1 = 60;
float min_rg = 0.25;
float max_rg = 1024;
float max_offset = 500000; //limited by the nyquist theorem apparently. So should be possible to calculate...
float gradient_duty_cycle = 100; //set to be bigger than default as a sanity check. Will cause an abort by default.
float gradient_duty_cycle_maximum = 5.0;
/************************************************************************************/


/************************************************************************************/

if(disclaimer == 1){
i1 = Proc_err(QUESTION_OPT,"THIS PROGRAM IS DISTRIBUTED IN THE HOPE THAT IT WILL BE USEFUL, \
WITHOUT ANY WARRANTY.\n IT IS PROVIDED 'AS IS' WITHOUT WARRANTY OF ANY KIND, EITHER EXPRESSED OR IMPLIED,\n \
INCLUDING, BUT NOT LIMITED TO, THE IMPLIED WARRANTY OF FITNESS FOR A PARTICULAR PURPOSE.\n \
THE ENTIRE RISK AS TO THE QUALITY AND PERFORMANCE OF THE PROGRAM IS WITH YOU.\n \
SHOULD THE PROGRAM PROVE DEFECTIVE, YOU ASSUME THE COST OF ALL NECESSARY SERVICING,\n \
REPAIR OR CORRECTION.\n\n \
IN NO EVENT WILL THE AUTHOR BE LIABLE TO YOU FOR DAMAGES, INCLUDING ANY GENERAL,\n \
SPECIAL, INCIDENTAL OR CONSEQUENTIAL DAMAGES ARISING OUT OF THE USE OR INABILITY\n \
TO USE THE PROGRAM (INCLUDING BUT NOT LIMITED TO LOSS OF DATA OR DATA BEING RENDERED\n \
INACCURATE OR LOSSES SUSTAINED BY YOU OR THIRD PARTIES OR A FAILURE OF THE PROGRAM\n \
TO OPERATE WITH ANY OTHER PROGRAMS), EVEN IF THE AUTHOR HAS BEEN ADVISED OF THE \n \
POSSIBILITY OF SUCH DAMAGES.\n\n \
Click OK to agree and continue. \nClick cancel to disagree.\n\n \
Remove this warning by setting disclaimer to 0 in the AU program.");

if ( i1 == ERR_CANCEL )
{
ABORT
}
else {
}
} //end of disclaimer

if (infomsg == 1)
{
	Proc_err(INFO_OPT,"This program will run a loop of 1D experiments; adding each one into a pseudo 2D dataset.\n \
		It was designed to build a quick 'map' of a tube, based on either 1H or 19F observe, to get the parameters for \n \
		the 'best' layer to perform a longer 1D acquisition. \n \
		It will examine the dataset it is run from to determine the nuclei. It uses the wavemaker software to calculate \n \
		the power level of the shaped pulse involved. Some default values and logic are included to try and ensure the pulse length \n \
		and power, as well as the gradient duty cycle are within limits. However I can't stress strongly enough; check before use!!! \n \
		The individual 1D experiments will have varying phase as you move up the tube; the 2D data can be processed in magnitude mode \n \
		to obscure this. \n \
		There is also another au program 'slice-proc' which will take apart the 2D into individual slices; phase correct them and put them \n \
		back into a processed directory; this gives sharper linewidths. \n ");
	i1 = Proc_err(QUESTION_OPT,"Display additional information on setting up and running the experiment?");
		if (i1 == ERR_OK)
	{
		i1=Proc_err(QUESTION_OPT,"Assuming you have created the 'slice-select-NUCLEI' and 'slice-select-2d' dataset, proceed as follows. \n \n \
- Run a quick 1D experiment of the nuclei you wish to observe; setting the O1P, sweepwidth etc as needed. \n  \
- Run this au program and answer the questions. \n \n\
This AU program will read in the parameter sets, use wavemaker to calculate the shaped pulse and run a succesion of 1D experiments. \n \
Note, THERE IS NO EASY WAY TO ABORT THE EXPERIMENT OTHER THAN QUITTING TOPSPIN!!! \n \
The pseudo 2D result can be processed with the command XF2M. You can then go to the expno %i do 'edc' to create another 1D experiment and set 'spoffs1' to run a desired slice with more scans.\n ",temp_exp_num);
	}


}


if(debug=1)
{
	GETSTRING("Flag set to debug mode. No acquisition will be run. Do you want to switch to switch to acquisition mode? (yes/no",tmpstr);
	if ( !strcmp(tmpstr,"yes") )
	{
		debug=0;
	}
}


FILE *ftitle = NULL;
/*Get the parameters of what nuclei, sw etc from current dataset*/
GETCURDATA;
FETCHPAR("NUC1",&nucleus);
FETCHPAR("TD",&orig_td);
FETCHPAR("O1", &orig_o1);
FETCHPAR("SW", &orig_sw);
FETCHPAR("SW_h", &orig_swh);
FETCHPAR("SFO1", &orig_sfo1);
FETCHPAR("P 1", &orig_p1);


i1 = Proc_err(QUESTION_OPT,"Using nucleus - %s \n OK or Cancel experiment?",nucleus);
if ( i1 == ERR_CANCEL )
{
   ABORT
}
else {
}

//Now set slice width. Originally to allowed user to choose, now set to SWH
bandwidth_hz=orig_swh;

if( (bandwidth_hz < bandwidth_hz_lower_limit) || (bandwidth_hz > bandwidth_hz_upper_limit) )
{
	Proc_err(DEF_ERR_OPT, "Bandwidth desired %f, exceeds limits of %f to %f. Check source experiment.\n Aborting...",bandwidth_hz, bandwidth_hz_lower_limit, bandwidth_hz_upper_limit);
	ABORT
} else

{
	Proc_err(DEF_ERR_OPT, "Bandwidth obtained from source experiment = %fHz ",bandwidth_hz);
}



while (choice_ok != 1) //have to get one thing correct...
{
	choice_ok = 0;
	GETFLOAT("What offset in hz away from 0 to takes slices over. At 500MHz, with 1H a 50% gradient, and slice bandwidth of 5000, 166666 is the maximum",offset_hz);
	if ( (offset_hz < 0) || (offset_hz > max_offset) )
	{
		Proc_err(INFO_OPT, "%f seems wrong or outside defaults, try again",offset_hz);
	}
	else {
		choice_ok++;
	}
/* I no longer think the offset in slices needs to be greater than the irradiation bandwidth
	if ( (offset_hz < bandwidth_hz)  )
	{
		Proc_err(INFO_OPT, "Offset needs to be more or equal to slice width - %f",bandwidth_hz);
	}
	else {
		choice_ok++;
	}
*/
}

choice_ok = 0; //in case we want to use this method again
bottom_hz = 0-offset_hz;

//Now set number of slices
while (choice_ok != 1) //have to get one thing correct...
{
	choice_ok = 0;
	GETINT("Number of slices on either side of zero",tmp_int);

	if ( ( (tmp_int < 0) || (tmp_int > max_slices) ) )
		{
		Proc_err(INFO_OPT, "%i is a crazy number, try again",tmp_int);
		}
		else {
		     choice_ok++;
		}
/*I don't think this is needed. The bandwidth of the region to be observed should be independent of slice width*/
/*
	tmpfloat = ( (offset_hz*2)/((tmp_int*2)+1) );
	if ( (tmpfloat < bandwidth_hz) )
		{
		Proc_err(INFO_OPT, "%i gives an offset increment less than the slice width, which doesn't make sense",tmp_int);
		Proc_err(INFO_OPT, "The slice width would be %f and needs to be more than %i", tmpfloat,bandwidth_hz);
		}
		else {
		     choice_ok++;
		}
*/

}
choice_ok = 0; //in case we want to use this method again
num_slices = (tmp_int *2)+1; //we want it to go through 0 really

//Now set gradient strength
for (;;)
{
	sprintf(qtext, "What gradient strength would you like? (Less than %f)",gradient_upper_limit);
	GETFLOAT(qtext,exp_gradient);
	if(gradient_upper_limit >=1 && exp_gradient <= gradient_upper_limit )
		{break;}
}

//Now set d1
for (;;)
{
	sprintf(qtext, "What d1 would you like (Min/Max - %f,%f)",min_d1,max_d1);
	GETFLOAT(qtext,exp_d1);
	if(exp_d1 >= min_d1 && exp_d1 <= max_d1 )
		{break;}
}

//Now set rg
for (;;)
{
	sprintf(qtext, "What RG would you like (Min/Max - %f,%f)",min_rg,max_rg);
	GETFLOAT(qtext,exp_rg);
	if(exp_rg >= min_rg && exp_rg <= max_rg )
		{break;}
}
//Now set NS
for (;;)
{
	sprintf(qtext, "What NS would you like (Min/Max - 1,%i)",max_scans);
	GETINT(qtext,exp_scans);
	if(exp_scans >= 1&& exp_scans <= max_scans )
		{break;}
}

GETCURDATA
//Now need to set up 2d experiment for data to go into.
sprintf(paramset, "slice-select-2d");
if (getParfileDirForRead(paramset, PAR_DIRS, paramfilePathname)< 0)
{
Proc_err(DEF_ERR_OPT, "Parameter set - %s - %s\n Aborting - Check README", paramset, paramfilePathname);
ABORT
}
RPAR(paramset,"all") //wipes the dataset au program called from
GETPROSOL
GETCURDATA
result_exp=expno;
/*setup 2d parameters*/
STOREPARN(2,"SW", orig_sw)
STOREPARNS(2, "SW", orig_sw)
STOREPARN(2,"TD", orig_td)
STOREPARNS(2,"TD", orig_td)
STOREPARN(1,"TD", num_slices)
STOREPARNS(1,"TD", num_slices)
STOREPAR("SFO1", orig_sfo1)
STOREPARN(2,"SFO1", orig_sfo1)
STOREPARNS(2,"SFO1", orig_sfo1)
FETCHPARN(1,"TD", &tmp_int)
Proc_err(INFO_OPT,"Fetched TD = %i",tmp_int);
GETCURDATA
//finished 2d setup

/*setup temp experiment to run the slices in*/
DATASET(name,temp_exp_num,1,disk,user) //switches to 1d experiment
VIEWDATA_SAMEWIN
sprintf(paramset, "slice-select-%s", nucleus);
if (getParfileDirForRead(paramset, PAR_DIRS, paramfilePathname)< 0)
{
Proc_err(DEF_ERR_OPT, "Parameter set - %s - %s\nAborting - Check README", paramset, paramfilePathname);
ABORT
}
RPAR(paramset,"all")
SETCURDATA
GETPROSOL

/********************************************************************************************************************/
/*Now set the 1d experiment up                                                                                      */
/*Originially tried - STOREPAR("NUC1",nucleus) THIS DOESNT WORK! AS DOESNT CHANGE THE ROUTING!COULD BE VERY UNSAFE! */
/* GETPROSOL for safety; will put the power levels back to instrument/probe defaults. We will change P1 to source   */
/*experiment however.                                                                                               */

//GETPROSOL - Uncomment this to add a bit more safety, stops uses mis-setting P1
STOREPAR("TD", orig_td)
STOREPAR("O1", orig_o1)
STOREPAR("SW", orig_sw)
STOREPAR("P 1", orig_p1)
STOREPAR("CNST 19",bandwidth_hz)
STOREPAR("GPZ 1",exp_gradient)
STOREPAR("NS", exp_scans)
STOREPAR("RG", exp_rg)
STOREPAR("D 1", exp_d1)

XCMD("sendgui wvm -a") //should allow for error checking here. Manual says accessible via XCMD
//XAU("wvm", "-a") //run wavemaker to set pulses
//XAU("wvm", "-v") //run wavemaker to set pulses

offset_inc = (offset_hz*2)/(num_slices-1); //because we're calculating the gaps...
Proc_err(INFO_OPT,"offset_inc=%f",offset_inc);
offset_hz = bottom_hz; //starts with negative value, which is bottom of tube
GETCURDATA
//add some info to the title and add to a logfile
sprintf( titlefile, "%s%s/%s/%i/pdata/1/title", disk, user, name, result_exp);
sprintf( tmpstr, "Slice selective NMR.  \nNo. Slices - %i\nIrradiation bandwidth in Hz - %f\nGradient strength percent - %f", num_slices, bandwidth_hz, exp_gradient );
ftitle = fopen( titlefile, "w");
	fputs( tmpstr, ftitle);
fclose( ftitle );
//Logfile of whats been done
sprintf( logfile,"%s%s/%s/%i/slice-log.csv", disk, user, name, result_exp);
//Finished 1d setup
/********************************************************************************************************************/


/*Fetch the parameters used from the dataset, calculate some values and give a last warning before running*/
FETCHPAR("P 11", &shape_length);
FETCHPAR("SPW 1", &shape_power);
FETCHPAR("AQ", &aq_secs);
FETCHPAR("D 1",&d1_secs);
FETCHPAR("P 1",&exp_p1);
FETCHPAR("PLW 1",&exp_p1w);

shape_power_dbw = fabs( 10 * (log10(shape_power)) );
gradient_duty_cycle = ((shape_length/1000000) / (d1_secs+aq_secs) * 100);
Tgrad = shape_length/1000;
Igrad = Imax * sqrt(Tmax/Tgrad);
Igrad_pc = (Igrad/Imax)*100;

i1 = Proc_err(QUESTION_OPT,"Going to use the following parameters for pulses:- \n \
bandwidth desired = %f - From FETCHPAR. \n \
shape pulse length = %f - From FETCHPAR. \n \
shape pulse power = %f watts, %f dBW - Calculated from above. \n \
Gradient duty cycle is %f = P11 div (AQ+D1) * 100 \n \
(maximum duty cycle is %f) \n \
According to 'typical pulses for cryoprobes' Maximum gradient available in 1 second is :- %fAmps, %f%%\n \
\n BE SURE THEY ARE NOT GOING TO DAMAGE THE PROBE \n \
\n OK or Cancel experiment?",bandwidth_hz,shape_length,shape_power,shape_power_dbw,gradient_duty_cycle,gradient_duty_cycle_maximum,Igrad,Igrad_pc);
if ( i1 == ERR_CANCEL )
{
   ABORT
}

if (gradient_duty_cycle > gradient_duty_cycle_maximum || Igrad_pc<=exp_gradient)
{
   Proc_err(INFO_OPT,"gradient duty cycle %f exceeds maximum %f. Aborting.",gradient_duty_cycle,gradient_duty_cycle_maximum);
   ABORT
}

//Ping the spectrometer
if (debug==0)
	{
	II
	}else
	{}

/*!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!*/
/*This is the main loop running the experiment*/
TIMES(num_slices) //we want it to go through 0 really
	loop++;
	STOREPAR("SPOFFS 1",offset_hz)
	sprintf(tmpstr,"\nLoop = %i Spoffs1 = %f ",loop,offset_hz);
	Proc_err(INFO_OPT,"%s",tmpstr);
	if (debug==0)
	{
		ZG_OVERWRITE;
	}
	else
	{
		Proc_err(INFO_OPT,"In debug mode, no aquisition run. %s",tmpstr);
	}

	//Write spoffs user for this slice to title file
	WSER(loop,name,result_exp,1,disk,user)
	ftitle = fopen( titlefile, "a");
		fputs( tmpstr, ftitle);
	fclose( ftitle );
	//Now write into a log file, csv.
	sprintf(tmpstr,"%i,%f\n",loop,offset_hz);
	ftitle = fopen( logfile,"a");
		fputs( tmpstr, ftitle);
	fclose( ftitle );
	offset_hz = offset_hz+offset_inc; //set offset for next experiment
END
sprintf(tmpstr,"P1-us-W=,%f,%f\nShape pulse-us-W,%f,%f\nGradient-%%-A,%f,%f\nBandwidth Hz-%f\n",exp_p1,exp_p1w,shape_length,shape_power,Igrad,Igrad_pc,bandwidth_hz);
ftitle = fopen( logfile,"a");
        fputs( tmpstr, ftitle);
fclose( ftitle );
/*!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!!*/

DATASET(name,result_exp,1,disk,user) //go back to datset called from with the written ser file in an show the result
VIEWDATA_SAMEWIN

QUIT
