//topshim_diagnose
//AU program to run topshim, and if it fails run it again and move the topshimdata
//to a folder with the name of the current experiment
//So that you can look at the data and see what might have gone wrong



char command[PATH_MAX];
char tscommand[PATH_MAX];
char experiment[100];
char reportdest[PATH_MAX];
char reportsource[PATH_MAX];
GETCURDATA
sprintf(tscommand,"topshim plotall %s", cmd);
XCMD(tscommand);
if(AUERR)
{
	
	sleep(5);
  XCMD(tscommand)
  #ifdef	HAS_WINDOWS_FEATURES
  sprintf(command,"ren C:\\Bruker\\TopSpin3.5pl7\\data\\topshimData topshimData_%s_%d", name, expno);  
//  Proc_err(DEF_ERR_OPT,command);
  #else 
  sprintf(command,"mv /opt/topspin4.0.4.b.4/data/topshimData /opt/topspin4.0.4.b.4/data/topshimData_%s_%d", name, expno);
  #endif
  system(command);
  strcpy(reportdest, ACQUPATH("topshim_report.txt"));
  sprintf(reportsource, "%s/%s/topshim_report.txt", PathXWinNMRProg(), PathXWinNMRCurDir());
  dircp(reportsource, reportdest);
}

//FETCHPAR("EXP", &experiment)
//if (strcmp(experiment, "PROHUMP") == 0)
//{
//	TUNE("lineshape.non")
//}

QUIT