/****************************************************************/
/*      noah_hsqc - process NOAH 13C HSQC correlation experiments */
/*      18.04.2017                                              */
/****************************************************************/
/*      Short Description :                                     */
/*      AU program for processing NOAH 13C HSQC correlation     */
/*      experiments.                                            */
/****************************************************************/
/*      Keywords :                                              */
/*      NOAH, noah_hsqc, automation                             */
/****************************************************************/
/*      Description/Usage : noah_hsqc FnMODE (optional).        */
/*      Default FnMODE is Echo-Antiecho. Used in splitx_au.     */
/****************************************************************/
/*      Author(s) :                                             */
/*      Name            : Eriks Kupce                           */
/*      Organisation    : Bruker BioSpin                        */
/*      Email           : eriks.kupce@bruker.com                */
/****************************************************************/
/*      Name            Date    Modification:                   */
/*      eku             170418  created                         */
/*      eku             231118  updated for NUS                 */
/*      eku             040219  updated to allow mixed FnMODE   */
/****************************************************************/
// NUS: reads VDLIST from dataset! for HSQC. 
// Fix the bugs: don't call proc_noah in this case
// Janus version: don't actually process, but put some extra info in the title file
// PTG 2026-04-30 Update to cover both TS3 and TS4 cases, ie different storage of the list files
//  in the dataset. In TS3 it's just stored as (for the HSQC) vdlist; in TS4 
//  it's in lists/vc under it's original name

char zgoptns[256];
FILE* fptr1;
char vclistname[PATH_MAX], vclistpath[PATH_MAX], line[PATH_MAX],vdlist[256];
int listentry[4096];
int numpts, ret, fidsf1, maxfid, fntp;
char titlefile[PATH_MAX], titletext[1024];
FILE *ftitle = NULL;



FETCHPARS("ZGOPTNS", zgoptns);
if (strstr(zgoptns,"-DNUS"))
{

//  check for NEO and act accordingly:
switch(is_blade_system())
    {
    case 0:
    		// AVIII: for HSQC the list is just "vdlist" in acqu dir
        strcpy(vclistpath,ACQUPATH("vdlist"));
        dircp(vclistpath, ACQUPATH("nuslist"));
    case 1:
    		// neo system, fish it out of the lists/vc subdir
        FETCHPARS("VDLIST", &vdlist);
        strcpy(vclistpath,ACQUPATH("lists/vc/"));
        strcat(vclistpath,vdlist);
        dircp(vclistpath, ACQUPATH("nuslist"));
    default:
    		
;
    }
	
	if ( (fptr1 = fopen (ACQUPATH("nuslist"),"r")) == NULL )
    {
      Proc_err(DEF_ERR_OPT, "Could not open nuslist file in dataset. Processing aborted!");
      ABORT
    }

    /* Read first point index value, then scan for total no. of delay values. */

    if ( fgets (line,sizeof(line),fptr1) == NULL )
    {
      Proc_err(DEF_ERR_OPT, "No nuslist entry found - check original VCLIST\n %s", vclistname);
      (void) fclose (fptr1);
      ABORT
    }

    if ( (ret = sscanf (line,"%d",&listentry[0])) != 1 )
    {
      Proc_err(DEF_ERR_OPT, "--- nuslist has no valid entries ---");
      (void) fclose (fptr1);
      ABORT
    }

    numpts = 1;

    /* Check for more point index values and find the largest */
    maxfid=1;
    while ( fgets (line,sizeof(line),fptr1) != NULL )
    {
      if ( (ret = sscanf (line,"%d",&listentry[numpts])) != 1 )
        break;
      if (listentry[numpts] > maxfid)
     { maxfid=listentry[numpts];}
      numpts++;
      	
    }

    (void) fclose (fptr1);
	
	STOREPARS("FNTYPE", 2)
	STOREPAR("FNTYPE", 2)
	// TD needs to be at least 2x the largest complex point index in the nuslist
STOREPAR1("TD",(maxfid*2)+2)
STOREPAR1S("NusTD",(maxfid*2)+2)
}


XCMD ("2 WDW QSINE")
XCMD ("1 WDW QSINE")
XCMD ("1 SSB 2")
XCMD ("2 SSB 2")
XCMD ("2 PH_mod pk")
XCMD ("1 PH_mod pk")
/*
XFB
// Check for NUS.
FETCHPARS("FnTYPE", &fntp)
if (fntp == 2) {
    XHT2
}
XCMD ("sendgui apk2d")
*/
XCMD ("2 NLEV 20")

XCMD ("2 SPECTYP HSQC")
strcpy(titlefile,PROCPATH("title"));
ftitle = fopen( titlefile, "a" );
sprintf( titletext, "\n Experiment: NOAH-HSQC \n Process with xfb;xht2;apk2d;xfb;levcalc");
fputs ( titletext, ftitle );
fclose ( ftitle );
QUIT

