//topshim_watchdog
//AU program to run topshim, and kill it after a while if not done.
//if it fails or is killed move the topshimdata
//to a folder with the name of the current experiment
//So that you can look at the data and see what might have gone wrong

//ptg 2022/03/08 correct path to curdir for lock file, and properly get it to delete file - argument is file path not FILE pointer
//djh35 2022/09/20 Add option to send messsage according to commandline option
//do output to correct version directory

//ptg 2023_03_07 temporarily disable emailing as we get too many!!
//djh 2023_04_18 - change ren to xcopy for the topshimData - allows janus to zip topshimData to dataset.

//example usage :- 
//janus_topshim_watchdog THIS_IS_A_MESSAGE_TO_SEND ordmax=8
//NB the message can't have spaces in... Ortherwise would look like more command line options.

// Now doing tunea always

//2024_01_31 added an ABORT in the last section if AUERR !0 - otherwise I think it gets reset

#include <time.h>
time_t now_s, dtime_s;		  	/* seconds since 1970 */
struct tm *now;	  		/* structure with year, month etc. */

char solvent[64];
char command[PATH_MAX];
char tscommand[PATH_MAX];
char experiment[100];
char reportdest[PATH_MAX];
char reportsource[PATH_MAX];
char tmp_str[PATH_MAX]; 
char datestamp[256];
char lockpath[PATH_MAX];
char pidpath[PATH_MAX];
char message[1023];
char topshim_option[255];
char bat_cmd_path[PATH_MAX]="NULL";
int pid;
int ts_major = GetTsVersionMajor();
int ts_minor = GetTsVersionMinor();
int ts_patch = GetTsVersionPl();

FILE *pidfile;
FILE *lockfile;
FILE *fbat=NULL;

//sprintf(bat_cmd_path,"C:\\Bruker\\TopSpin%i.%i.%i\\data\\xcopy_tsData.bat",ts_major,ts_minor,ts_patch);
sprintf(bat_cmd_path,"F:\\chemist\\xcopy_tsData.bat",ts_major,ts_minor,ts_patch);
//set topshim_option to just a blank character - will this prevent errors?


sprintf(topshim_option," ");

if (i_argc == 3 ) { //assume the argument is a message to send
    sprintf(message,"%s",i_argv[2]); 
}

if (i_argc == 4) {
   sprintf(message,"%s",i_argv[2]); 
   sprintf(topshim_option,"%s",i_argv[3]); 
}

if (i_argc > 4 ){
    sprintf(tmp_str,"Too many arguments passed to %s",i_argv[0]);
    STOPMSG(tmp_str)
}
GETCURDATA 

// 

/* get current time for timestamping the copy - can't use experiment name here because kiosk */
now_s=time(NULL);
now = localtime(&now_s);
sprintf(datestamp, "%d_%d_%d_%d_%d_%d", now->tm_year+1900, 1+now->tm_mon, now->tm_mday, now->tm_hour, now->tm_min, now->tm_sec);

// write lock file
sprintf(lockpath, "%s/%s/topshim_lockfile", PathXWinNMRProg(),PathXWinNMRCurDir());
lockfile = fopen(lockpath, "wt");
fclose(lockfile);

// start the watchdog AU and then carry on

CPR_exec("xau topshimkiller", WAIT_START); 



// execute topshim as desired
//sprintf(tscommand,"topshim plotall convcomp %s",topshim_option);

/* Previously not doing tuneaxyz for CDCl3:
FETCHPAR("SOLVENT", solvent);
if(strcmp(solvent, "CDCl3"))
{
sprintf(tscommand,"topshim plotall convcomp tuneaxyz %s", topshim_option);
}
else
{
sprintf(tscommand,"topshim plotall convcomp %s", topshim_option);
}
*/

// tuneaxz should be ok for CDCl3 now?
sprintf(tscommand,"topshim plotall convcomp tuneaxyz %s", topshim_option);
XCMD(tscommand);



// delete the lockfile  *and kill the killer program!!!!!* if topshim completes OK

remove(lockpath);  // get rid of the kil file!

sprintf(pidpath, "%s/%s/topshim_pidfile", PathXWinNMRProg(),PathXWinNMRCurDir());

/* try and open the file */
if (pidfile = fopen(pidpath, "rt")) 
{

	/* read the PID number */
	fscanf(pidfile, "%d", &pid);
	fclose(pidfile);

	/* kill the process! */
	Proc_err(INFO_OPT, "killing PID = %d !", pid);
	sprintf(command, "kill %d", pid);
	CPR_exec(command, CONT_EX);

}
 
//test 

sprintf( command, "robocopy C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData /S C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData_%s > nul",ts_major,ts_minor,ts_patch,ts_major,ts_minor,ts_patch,datestamp);
 //sprintf(command,"xcopy C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData_%s\\ /E /H \n", ts_major,ts_minor,ts_patch,ts_major,ts_minor,ts_patch,datestamp);
system(command);


Proc_err(DEF_ERR_OPT,"auerr=%d", AUERR);

// check for failed execution
if(AUERR)
{
// temp remove email stuff
//	if (i_argc > 2 ) { //assume the argument is a message to send
//       XAU("whoopwhoop",message);
//	} else
//	   {
//	     sprintf(tmp_str, "TOPSHIM_FAILED");
//	     XAU("whoopwhoop",tmp_str)
//	   }


   sleep(5);
   // don't repeat topshim!!
   // XCMD(tscommand)
   #ifdef	HAS_WINDOWS_FEATURES
  // sprintf(command,"ren C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData topshimData_%s", ts_major,ts_minor,ts_patch,datestamp);  
  //xcopy just doesnt seem to run, not even in a bat file
  //   sprintf(command,"xcopy C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData_%s\\ /E /H \n", ts_major,ts_minor,ts_patch,ts_major,ts_minor,ts_patch,datestamp);

    // sprintf( command, "robocopy C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData /S C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData_%s ",ts_major,ts_minor,ts_patch,ts_major,ts_minor,ts_patch,datestamp);
    sprintf( command, "robocopy C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData /S C:\\Bruker\\TopSpin%i.%i.%i\\data\\topshimData_%s >NUL 2>NUL",ts_major,ts_minor,ts_patch,ts_major,ts_minor,ts_patch,datestamp);
    /* code if you want to make a bat file to run the command
       fbat = fopen(bat_cmd_path, "w");
     fputs( command,fbat);
     fclose(fbat);
     Proc_err(DEF_ERR_OPT,bat_cmd_path,command);
       // system(bat_cmd_path); //which is why we mess about with a bat file.
   */  
   XCMD("setdef stdout off"); // do we like spam?
   XCMD("setdef stderr off");  
   system(command);  //dunno why the system command is unreliable with xcopy
   XCMD("setdef stdout on");  //yes we do...
   XCMD("setdef stderr on");
   #else 
     sprintf(command,"mv /opt/topspin%i.%i.%i/data/topshimData /opt/topspin%i.%i.%i/data/topshimData_%s", ts_major,ts_minor,ts_patch,datestamp,ts_major,ts_minor,ts_patch);
     system(command);   
   #endif
   
  //report copying now automatic
//  strcpy(reportdest, ACQUPATH("topshim_report.txt"));
//  sprintf(reportsource, "%s/%s/topshim_report.txt", PathXWinNMRProg(), PathXWinNMRCurDir());
//  dircp(reportsource, reportdest);
Proc_err(DEF_ERR_OPT,"auerr=%d", AUERR);
ABORT
}



QUIT