/*made by GSK originally, heavily modded by DJH at Cambridge Uni	*/
/*Will run through a dataset (up to exp no 999) and process each exp 	*/
/*according to the pulse program and nucei				*/
/*simplified June 21 to call service-def-proc*/

#include <stdio.h>
#include <inc/sysutil>

char homepul[128], pul[128], directory[PATH_MAX], data_File[PATH_MAX], nuc1[20], nuc2[20],au_p[128];

int mode, dexpno, i_expno, i_limit, Hexpno, Cexpno;
float Hsr, Csr;

Hexpno=0;
Cexpno=0;
i_expno=1;
Hsr=0.0;
Csr=0.0;

GETCURDATA
dexpno = expno;

FETCHPAR("PULPROG", &homepul)

(void) sprintf(directory, "%s%s/%s", disk, user, name);
Proc_err(INFO_OPT,"%s",directory);
i_limit = gethighest(directory);

if( i_limit > 999 ) i_limit = 999;

while (i_expno < i_limit)
{
	sprintf( data_File, "%s%s/%s/%d/pulseprogram", disk, user, name, i_expno );
	if( access( data_File, R_OK ) == 0 )
	 {
	 	 DATASET(name, i_expno, procno, disk, user)
	 	 VIEWDATA_SAMEWIN
	 	 SETCURDATA
	 	 GETCURDATA
	 	 XAU("service-def-proc",cmd)
	 }
 	i_expno++;
}


QUIT