float phigh=25.0;
float plow=-10.0;
float hsr=0.0;
int finish=0;
int suffix=1;
char titlefile[PATH_MAX], titletext[512], titletextnew[512];
char intrng_ref[PATH_MAX];
char ref_int_name[20]="zzz_intrng_ref"; //copy a reference integral to this file name, in the directory above the exp name
char sys_command[PATH_MAX];
char pdfname[PATH_MAX]="";
char pul[255],nuc1[7];
FILE *ftitle = NULL; 

GETCURDATA;

FETCHPAR("PULPROG", &pul)
FETCHPAR("NUC1",nuc1)

STOREPAR("cy", 20.0);
STOREPAR("mi",0.5);

sprintf( intrng_ref, "%s%s/%s",disk,user,ref_int_name);
//Proc_err(QUESTION_OPT,"%s",intrng_ref);
if(access(intrng_ref, R_OK) == 0) //there is a reference intrng region saved
{
	 sprintf(sys_command, " cp %s %s/intrng",intrng_ref, PROCPATH(0) );
   //Proc_err(QUESTION_OPT,"%s",sys_command);
	 system(sys_command); //not sure which is best, cp or RMISC
//	 RMISC("intrng",intrng_ref);
	SM_INT;
}
else {
		Proc_err(QUESTION_OPT,"Reference integral %s not found. Integrate a dataset and copy the intrng file",intrng_ref);
}
XMAC("wet-proc");

//Proc_err(QUESTION_OPT,"%s",intrng_ref);
//There is some funnyness here. The integral file/data doesn't seem to be created unless the above is done twice.
if(access(intrng_ref, R_OK) == 0) //there is a reference intrng region saved
{
	 sprintf(sys_command, " cp %s %s/intrng",intrng_ref, PROCPATH(0) );
//	 Proc_err(QUESTION_OPT,"%s",sys_command);
	 system(sys_command);
//	 RMISC("intrng",intrng_ref);
	 STOREPAR("INTSCL",-1.0)
	 SM_INT;
	 STOREPAR("CURPRIN","integrals.txt")
	 LIPP
}
XCMD("sendgui .int");
XCMD("sendgui .sret");
//XCMD("apk");
//XCMD("absn");
//XCMD("absn");
//SM_INT;
//LI;
PP;



DATASET( name, expno, procno, disk, user);
STOREPAR("layout", "+/service-proton.xwp")
sprintf( titlefile, "%s%s/%s/%i/pdata/1/title", disk, user, name, expno); 
sprintf(titletextnew, "\n%s\n", name);
ftitle = fopen( titlefile, "a");
fputs( titletextnew, ftitle); /*add new text to it*/
fclose( ftitle);


while (finish==0)
{
	sprintf( pdfname, "%s/%s-%s-%s-%d.pdf",PROCPATH(0),name, pul, nuc1, suffix);
	if(access(pdfname, R_OK) != 0) // if we can't read pdf file assume its not there
	{
		finish=1;
	}
	else
	{
		suffix++;
		
	}
}
AUTOPLOT_TO_FILE(pdfname);
QUIT


