;hsqcetgpsp.2
;avance-version (20/03/03)
;HSQC
;2D H-1/X correlation via double inept transfer
;phase sensitive using Echo/Antiecho-TPPI gradient selection
;with decoupling during acquisition
;using trim pulses in inept transfer
;using shaped pulses for inversion and refocussing on f2 - channel
;with carbon purge pulse
;with BIP proton pulse in T1
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d4=1s/(cnst2*4)"
"d11=30m"

#   ifdef LABEL_CN
"p22=p21*2"
#   else
#   endif /*LABEL_CN*/


"d0=3u"

"in0=inf1/2"


"DELTA1=d4-p16-larger(p2,p14)/2-de-8u-p3"
"DELTA2=d4-larger(p2,p14)/2"
"DELTA3=d4-larger(p2,p14)/2-p1*2/PI"

#   ifdef LABEL_CN
"DELTA=p16+d16+larger(p2,p22)+d0*2"
#   else
"DELTA=p16+d16+p44+d0*2"
#   endif /*LABEL_CN*/


"acqt0=0"
baseopt_echo


1 ze
  d11 pl12:f2
2 d1 do:f2 
3 (p1 ph1)
  DELTA2 pl0:f2
  4u
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  4u
  DELTA2 pl2:f2 UNBLKGRAD

#   ifdef TRIMP
  p28 ph1
#   endif /* TRIMP */

  (p1 ph2) (p3 ph3):f2
  d0 

#   ifdef LABEL_CN
  (center (p2 ph5) (p22 ph1):f3 )
#   else
  (p44:sp30 ph5):f1
#   endif /*LABEL_CN*/

  d0
  p16:gp1*EA
  d16 pl0:f2
  4u pl1:f1
  (p24:sp7 ph4):f2
  4u
  DELTA pl2:f2
  (ralign (p1 ph1) (p3 ph4):f2 )
  DELTA3 pl0:f2
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  p16:gp2
  DELTA1 pl2:f2
  4u BLKGRAD
# ifdef oddpurge
   if "nsdone %2 == 0"
     {
     (p3 ph7):f2
     }
  else
     {
     DELTA5
     }
# else
 (p3 ph7):f2
# endif
  0.1u pl12:f2
#   ifdef CPDS
  go=2 ph31 cpds2:f2
#   else
  go=2 ph31 cpd2:f2
#   endif /*CPDS*/
  d1 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0) & calph(ph3, +180) & calph(ph6, +180) & calph(ph31, +180))
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 0 0 0 2 2 2 2
ph5=0 0 2 2
ph6=0
ph7=0
ph31=0 2 0 2 2 0 2 0


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl3 : f3 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp3: f2 channel - shaped pulse 180 degree for inversion
;sp7: f2 channel - shaped pulse 180 degree for refocussing
;sp30: f1 channel - shaped pulse for inversion
;spnam30: BIP720,0.5,20.1
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;p16: homospoil/gradient pulse
;p22: f3 channel - 180 degree high power pulse
;p24: f2 channel - 180 degree shaped pulse for refocussing
;p28: f1 channel - trim pulse
;p44 : f1 channel - 180 degree shaped pulse for inversion
;d0 : incremented delay (2D)                         [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J)XH
;d11: delay for disk I/O                             [30 msec]
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;inf1: 1/SW(X) = 2 * DW(X)
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;ns: 1 * n
;ds: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence


;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13, 8.1% for N-15

;use gradient files:   
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


                                          ;preprocessor-flags-start
;LABEL_CN: for C-13 and N-15 labeled samples start experiment with 
;             option -DLABEL_CN (eda: ZGOPTNS)
;TRIMP: to use trimpulse p28@pl1 start experiment with
;          option -DTRIMP (eda: ZGOPTNS)
;CPDS: for synchronous CPD start experiment with 
;             option -DCPDS (eda: ZGOPTNS)
                                          ;preprocessor-flags-end



;$Id: hsqcetgpsp.2,v 1.9.2.2 2020/03/03 15:12:09 ber Exp $
