;zgbbigqn.ptg
;avance-version (12/01/11)
;1D sequence
;broadband excitation using a shaped pulse
;with inverse gated decoupling
;for 19F obs, 1H dec using QNP switch
; see e.g. JMR 325(2021) 106928 
;doi: 10.1016/j/jmr.2021.106928
;
;With setting of acqt0 based on zgoptns set for different opera pulses or CNST0

;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

prosol relations=<bb>
#include <Avance.incl>
#include <De.incl>
"d11=30m"
"d12=4u"


"acqt0=cnst0"
#   ifdef OPERA90
"acqt0=-p54*0.2306"
# endif 
#   ifdef OPERA45
"acqt0=-p54*0.2494"
# endif
#   ifdef OPERA30
"acqt0=-p54*0.2497"
# endif

1 ze
  d11 QNP_X
  d11 pl12:f2
2 30m do:f2
  d1
  d12 SWITO_F
  4u pl0:f1
  p54:sp33:f1 ph1:r
  ACQ_START(ph30,ph31) (2u SWITO_H)
  aq DWELL_GEN:f1 cpd2:f2
  rcyc=2
  30m do:f2  mc #0 to 2 F0(zd)
exit


ph1=0 2 1 3 2 0 3 1
ph30=0
ph31=0 2 1 3 2 0 3 1


;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;sp33: f1 channel - shaped pulse for broadband excitation
;p54: f1 channel -  shaped pulse length for exciation
;d1 : relaxation delay; 1-5 * T1
;cnst21: chemical shift for selective pulse (offset, in ppm)
;ns: 1 * n, total number of scans: NS * TD0
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence





;$Id: selzg,v 1.13 2012/01/31 17:49:28 ber Exp $
